PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['participant_id'],expName, expInfo['date'])
  End Message = Have a Wonderful day!
  Experiment info = {'participant_id': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['experiment_stimuli/Block1.xlsx', 'experiment_stimuli/Block2.xlsx', 'experiment_stimuli/Block3.xlsx', 'experiment_stimuli/Block4.xlsx', 'experiment_stimuli/Block5.xlsx', 'experiment_stimuli/Block6.xlsx', 'experiment_stimuli/Block7.xlsx', 'experiment_stimuli/Block8.xlsx', 'experiment_stimuli/Block9.xlsx', 'experiment_stimuli/Block10.xlsx', 'experiment_stimuli/chooseBlocks.xlsx']
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1536, 864]
  color = black
  expName = SentenceDecisionTask
  expVersion = v2
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Start_Task_Routine
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    TextComponent InstructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        You are about to begin a sentence judgment task.
        You will see a series of items. Decide whether each one is a literal sentence or not.

        Instructions:
        Left mouse click = Literally False Sentence
        Right mouse click =  Literally True Sentence

        Press "spacebar" key  to begin.
    KeyboardComponent StartKeyboard
      allowedKeys = 't','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent setupsScript
      Code Type = JS
      Begin JS Experiment:
        document.addEventListener('contextmenu', function(e) {
            e.preventDefault();
        });

        //disable downloading result to browser
        psychoJS._saveResults = 0;
  Routine Trial
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    TextComponent StimuliText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text [set every repeat]:
        $Stimuli
    TextComponent responseInstructions
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text [set every repeat]:
        Left mouse click = Literally False Sentence
        Right mouse click =  Literally True Sentence
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      timeRelativeTo = routine
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    CodeComponent storeMouseResponse
      Code Type = Auto->JS
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      Begin Routine:
        first_mouse_key_response = True
        response_time =[]
      Each Frame:
        if first_mouse_key_response:
            response_time = mouse.mouseClock.getTime()
            buttons = mouse.getPressed()
            if buttons[0] == 1:
                resp = 'left'
                first_mouse_key_response = False

            elif buttons[2] == 1:
                resp = 'right'
                first_mouse_key_response = False
      End Routine:
        print("Response:", resp, "Correct_answer:", mouse_key)
        # Score correctness
        corr_text = 'yes' if resp == mouse_key else 'no' if resp is not None else None
        corr = '1' if resp == mouse_key else '0' if resp is not None else None

        print("corr_text:", corr_text, "corr:", corr)

        # Record data to CSV
        trialLoop.addData('response_time', response_time)
        trialLoop.addData('participant_response', resp)
        trialLoop.addData('is_correct?', corr_text)
        trialLoop.addData('accuracy', corr)
  Routine test
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    CodeComponent code
      Code Type = Auto->JS
  Routine Fixation_Cross
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
      text = +
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    CodeComponent fixationScript
      Code Type = Auto->JS
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      Begin Routine:
        if blockLoop.thisN == 4 or blockLoop.thisN == 9:
            continueRoutine = False
        else:
            continueRoutine = True
  Routine Midpoint_Break
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    TextComponent Instruction_Break
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed the first run of the task.
        Press the 'spacebar' key to resume.
    KeyboardComponent breakKeyPress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent breakScript
      Code Type = Auto->JS
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      Begin Routine:
        if (blockLoop.thisN == 4):
            continueRoutine = True
        else:
            continueRoutine = False
  Routine End_Task_Routine
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    TextComponent Instruction_Exit
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have now completed the task.

        Thank you for your participation!

        You may now close the experiment. Press the "x' key to exit.
    KeyboardComponent endKeyPress
      allowedKeys = 'x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent endScript
      Code Type = JS
      Begin JS Routine:
        //disable downloading result to browser
        psychoJS._saveResults = 0;

        //create filename for result
        let now = new Date();
        let timestamp = now.getFullYear()+'-'+(now.getMonth()+1)+'-'+now.getDate()+'_'+now.getHours()+'h'+  now.getMinutes() + 'm' + now.getSeconds() + 's';
        let filename = psychoJS._experiment._experimentName+'_sub'+ expInfo["participant_id"]+'_'+ timestamp+'.csv'

        //extract result from experiment
        let dataObj = psychoJS._experiment._trialsData;
        const fields = ['participant_id','Block','mouse_key','Stimuli_Type','Stimuli','One_subsubj_two_subObj','response_time','participant_response', 'is_correct?','accuracy', 'Trial.started', 'Trial.stopped','Start_Task_Routine.started','Start_Task_Routine.stopped'];

        // Build datatable
        let data = [
          fields.join(','), // header row
          ...dataObj.map(trial => {
            return fields.map(f => trial[f] !== undefined ? trial[f] : '').join(',');
          })
        ].join('\n');

        //send data to OSF through datapipe platform
        fetch("https://pipe.jspsych.org/api/data/", {
                method: "POST",
                headers: {
                    "Content-Type": "application/json",
                    "Authorization": "*/*"
                },
                body: JSON.stringify({
                    experimentID: 'SnhAIILNiRDu',
                    filename: filename,
                    data: data,
            }),
         }).then(response => response.json()).then(data => {
                console.log(data);
            })
            .catch((err) => {
                console.error("Failed to send trial data:", err);
            });
Flow
  Routine Start_Task_Routine
  LoopInitiator blockLoop loopType="TrialHandler"
    conditionsFile = experiment_stimuli/chooseBlocks.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'condsFile': 'Block1.xlsx'},
      {'condsFile': 'Block2.xlsx'},
      {'condsFile': 'Block3.xlsx'},
      {'condsFile': 'Block4.xlsx'},
      {'condsFile': 'Block5.xlsx'},
      {'condsFile': 'Block6.xlsx'},
      {'condsFile': 'Block7.xlsx'},
      {'condsFile': 'Block8.xlsx'},
      {'condsFile': 'Block9.xlsx'},
      {'condsFile': 'Block10.xlsx'}]
    LoopInitiator trialLoop loopType="TrialHandler"
      conditionsFile = $'experiment_stimuli/' + condsFile
      loopType = random
      nReps = 1
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      Routine Trial
    LoopTerminator trialLoop
    Routine Fixation_Cross
    Routine Midpoint_Break
  LoopTerminator blockLoop
  Routine End_Task_Routine
